<CompuCell3D Revision="20210612" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>8</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="200" z="40"/>
      <Steps>501</Steps>
      <Temperature>40.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <RandomSeed>12345</RandomSeed>
      <Boundary_z>Periodic</Boundary_z>
       <Boundary_x>Periodic</Boundary_x>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="ECM"/>
      <CellType TypeId="2" TypeName="qVEC"/>
      <CellType TypeId="3" TypeName="aVEC"/>
      <CellType TypeId="4" TypeName="qVIC"/>
      <CellType TypeId="5" TypeName="aVIC"/>
      <CellType TypeId="6" TypeName="OST"/>
      <CellType TypeId="7" TypeName="DEAD"/>
      <CellType TypeId="8" TypeName="CaNod"/>
      <CellType TypeId="9" TypeName="nECM"/>
   </Plugin>



    <Plugin Name="BoundaryPixelTracker">
        <NeighborOrder>1</NeighborOrder>
    </Plugin>
    <Plugin Name="PixelTracker"/>
    <Plugin Name="Volume"/>
    <Plugin Name="CenterOfMass"/>
    <Plugin Name="Secretion"/>
    <Plugin Name="NeighborTracker"/>
    <Plugin Name="Surface"/>


<Plugin Name="Contact">
   <!-- Specification of adhesion energies -->
   <Energy Type1="Medium" Type2="Medium">10.0</Energy>
   <Energy Type1="Medium" Type2="ECM">20.0</Energy>
   <Energy Type1="Medium" Type2="qVEC">20.0</Energy>
   <Energy Type1="Medium" Type2="aVEC">20.0</Energy>
   <Energy Type1="Medium" Type2="qVIC">20.0</Energy>
   <Energy Type1="Medium" Type2="aVIC">20.0</Energy>
   <Energy Type1="Medium" Type2="OST">20.0</Energy>
   <Energy Type1="Medium" Type2="DEAD">20.0</Energy>
   <Energy Type1="Medium" Type2="CaNod">20.0</Energy>
   <Energy Type1="Medium" Type2="nECM">10.0</Energy>
   <Energy Type1="ECM" Type2="ECM">10.0</Energy>
   <Energy Type1="ECM" Type2="qVEC">10.0</Energy>
   <Energy Type1="ECM" Type2="aVEC">0.0</Energy>
   <Energy Type1="ECM" Type2="qVIC">5.0</Energy>
   <Energy Type1="ECM" Type2="aVIC">10.0</Energy>
   <Energy Type1="ECM" Type2="OST">10.0</Energy>
   <Energy Type1="ECM" Type2="DEAD">10.0</Energy>
   <Energy Type1="ECM" Type2="CaNod">10.0</Energy>
   <Energy Type1="ECM" Type2="nECM">10.0</Energy>
   <Energy Type1="qVEC" Type2="qVEC">10.0</Energy>
   <Energy Type1="qVEC" Type2="aVEC">100.0</Energy>
   <Energy Type1="qVEC" Type2="qVIC">10.0</Energy>
   <Energy Type1="qVEC" Type2="aVIC">10.0</Energy>
   <Energy Type1="qVEC" Type2="OST">10.0</Energy>
   <Energy Type1="qVEC" Type2="DEAD">10.0</Energy>
   <Energy Type1="qVEC" Type2="CaNod">10.0</Energy>
   <Energy Type1="qVEC" Type2="nECM">10.0</Energy>
   <Energy Type1="aVEC" Type2="aVEC">100.0</Energy>
   <Energy Type1="aVEC" Type2="qVIC">100.0</Energy>
   <Energy Type1="aVEC" Type2="aVIC">100.0</Energy>
   <Energy Type1="aVEC" Type2="OST">100.0</Energy>
   <Energy Type1="aVEC" Type2="DEAD">100.0</Energy>
   <Energy Type1="aVEC" Type2="CaNod">10.0</Energy>
   <Energy Type1="aVEC" Type2="nECM">10.0</Energy>
   <Energy Type1="qVIC" Type2="qVIC">10.0</Energy>
   <Energy Type1="qVIC" Type2="aVIC">100.0</Energy>
   <Energy Type1="qVIC" Type2="OST">10.0</Energy>
   <Energy Type1="qVIC" Type2="DEAD">10.0</Energy>
   <Energy Type1="qVIC" Type2="CaNod">10.0</Energy>
   <Energy Type1="qVIC" Type2="nECM">10.0</Energy>
   <Energy Type1="aVIC" Type2="aVIC">100.0</Energy>
   <Energy Type1="aVIC" Type2="OST">10.0</Energy>
   <Energy Type1="aVIC" Type2="DEAD">10.0</Energy>
   <Energy Type1="aVIC" Type2="CaNod">10.0</Energy>
   <Energy Type1="aVIC" Type2="nECM">10.0</Energy>
   <Energy Type1="OST" Type2="OST">10.0</Energy>
   <Energy Type1="OST" Type2="DEAD">10.0</Energy>
   <Energy Type1="OST" Type2="CaNod">10.0</Energy>
   <Energy Type1="OST" Type2="nECM">10.0</Energy>
   <Energy Type1="DEAD" Type2="DEAD">10.0</Energy>
   <Energy Type1="DEAD" Type2="CaNod">10.0</Energy>
   <Energy Type1="DEAD" Type2="nECM">10.0</Energy>
   <Energy Type1="CaNod" Type2="CaNod">10.0</Energy>
   <Energy Type1="CaNod" Type2="nECM">10.0</Energy>
   <Energy Type1="nECM" Type2="nECM">10.0</Energy>
   <NeighborOrder>4</NeighborOrder>
</Plugin>
   
<Plugin Name="Chemotaxis">

   <!-- You may repeat ChemicalField element for each chemical field declared in the PDE solvers -->
   <!-- Specification of chemotaxis properties of select cell types. -->
   <ChemicalField Name="ECM_Gradient">
      <ChemotaxisByType  Lambda="1000.0" Type="aVEC"/>
<!--      <ChemotaxisByType Lambda="5000000.0" SaturationCoef="1000.0" Type="aVEC"/>-->
<!--      <ChemotaxisByType ChemotactTowards="CELL_TYPES" Lambda="1.0" SaturationLinearCoef="10.1" Type="CHEMOTAXING_TYPE"/>-->
   </ChemicalField>

   <ChemicalField Name="ECM_Fibers">
      <ChemotaxisByType  Lambda="1000.0" Type="aVEC"/>
<!--      <ChemotaxisByType Lambda="5000.0" SaturationCoef="0.9" Type="VIC"/>-->
<!--      <ChemotaxisByType ChemotactTowards="CELL_TYPES" Lambda="1.0" SaturationLinearCoef="10.1" Type="CHEMOTAXING_TYPE"/>-->
   </ChemicalField>
</Plugin>


   
<!--   <Steppable Type="DiffusionSolverFE">-->
       <Steppable Type="DiffusionSolverFE_OpenCL">

    <DiffusionField Name="MDE">
          <DiffusionData>
            <FieldName>MDE</FieldName>
            <DiffusionConstant>2.4</DiffusionConstant><!--it would be 24-->
            <DecayConstant>0.06</DecayConstant><!--2.51E-04-->
          </DiffusionData>
          <BoundaryConditions>
            <Plane Axis="X">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Z">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
          </BoundaryConditions>
        </DiffusionField>

       <DiffusionField Name="TGFb">
         <DiffusionData>
            <FieldName>TGFb</FieldName>
            <DiffusionConstant>0.36</DiffusionConstant><!--it would be 36-->
            <DecayConstant>0.06</DecayConstant><!--2.51E-04-->
             <DiffusionCoefficient CellType="ECM">0.0</DiffusionCoefficient>
             <DiffusionCoefficient CellType="nECM">0.0</DiffusionCoefficient>
          </DiffusionData>
          <BoundaryConditions>
            <Plane Axis="X">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="0.4"/>
            </Plane>
            <Plane Axis="Z">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
          </BoundaryConditions>
        </DiffusionField>

    <DiffusionField Name="ECM_Gradient">
        <DiffusionData>
         <FieldName>ECM_Gradient</FieldName>
<!--         <GlobalDiffusionConstant>0.01</GlobalDiffusionConstant>-->
<!--         <GlobalDecayConstant>1e-05</GlobalDecayConstant>-->
         <!-- Additional options are: -->
         <InitialConcentrationExpression>100-0.2*y</InitialConcentrationExpression>
      </DiffusionData>

      <BoundaryConditions>
         <Plane Axis="X">
            <ConstantDerivative PlanePosition="Min" Value="0.0"/>
            <ConstantDerivative PlanePosition="Max" Value="0.0"/>

         </Plane>
         <Plane Axis="Y">
            <ConstantValue PlanePosition="Min" Value="1.0"/>
            <ConstantValue PlanePosition="Max" Value="0.0"/>
         </Plane>
         <Plane Axis="Z">
            <ConstantDerivative PlanePosition="Min" Value="0.0"/>
            <ConstantDerivative PlanePosition="Max" Value="0.0"/>
         </Plane>
      </BoundaryConditions>
   </DiffusionField>

    <DiffusionField Name="ECM_Fibers">
          <DiffusionData>
            <FieldName>ECM_Fibers</FieldName>
            <DiffusionConstant>0.5</DiffusionConstant><!--1.98E-04-->
            <DecayConstant>0.05</DecayConstant><!--2.51E-04-->
          </DiffusionData>
       <SecretionData>
          <ConstantConcentration Type="ECM">1</ConstantConcentration>
          <ConstantConcentration Type="nECM">1</ConstantConcentration>
      </SecretionData>
          <BoundaryConditions>
            <Plane Axis="X">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Z">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
          </BoundaryConditions>
        </DiffusionField>

   <DiffusionField Name="DEAD_Cells">
          <DiffusionData>
            <FieldName>DEAD_Cells</FieldName>
            <DiffusionConstant>0.2</DiffusionConstant><!--1.98E-04-->
            <DecayConstant>0.02</DecayConstant><!--2.51E-04-->
              <DiffusionCoefficient CellType="ECM">0.0</DiffusionCoefficient>
             <DiffusionCoefficient CellType="nECM">0.0</DiffusionCoefficient>
          </DiffusionData>
       <SecretionData>
          <ConstantConcentration Type="DEAD">1</ConstantConcentration>
      </SecretionData>
          <BoundaryConditions>
            <Plane Axis="X">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Z">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
          </BoundaryConditions>
        </DiffusionField>
</Steppable>

   
   <Steppable Type="UniformInitializer">
      <Region>
         <BoxMin x="0" y="170" z="0"/>
         <BoxMax x="100" y="190" z="40"/>
         <Gap>0</Gap>
         <Width>20</Width>
         <Types>qVEC</Types>
      </Region>
   </Steppable>
</CompuCell3D>
